PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = change-localization
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Routines
  Routine instructions
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Welcome.
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  Routine practice
  Routine array
    PolygonComponent fixA
      fillColor = $[1,1,1]
      lineWidth = .5
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    PolygonComponent stim1
      durationEstim = 1
      fillColor [set every repeat] = $stim_color1
      lineColor [set every repeat] = $stim_color1
      pos [set every repeat] = [x1,y1]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
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    PolygonComponent stim2
      durationEstim = 1
      fillColor [set every repeat] = $stim_color2
      lineColor [set every repeat] = $stim_color2
      pos [set every repeat] = [x2,y2]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
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    PolygonComponent stim3
      durationEstim = 1
      fillColor [set every repeat] = $stim_color3
      lineColor [set every repeat] = $stim_color3
      pos [set every repeat] = [x3,y3]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
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    PolygonComponent stim4
      durationEstim = 1
      fillColor [set every repeat] = $stim_color4
      lineColor [set every repeat] = $stim_color4
      pos [set every repeat] = [x4,y4]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
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    PolygonComponent stim5
      durationEstim = 1
      fillColor [set every repeat] = $stim_color5
      lineColor [set every repeat] = $stim_color5
      pos [set every repeat] = [x5,y5]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
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  Routine probe
    PolygonComponent fixB
      fillColor = $[1,1,1]
      lineWidth = .5
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    MouseComponent mouse
      clickable = probe1,probe2,probe3,probe4,probe5
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = name,pos
      startVal [time (s)] = 4
      stopVal [duration (s)] = 4
      syncScreenRefresh = True
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    PolygonComponent probe1
      durationEstim = 1
      fillColor [set every repeat] = $probe_color1
      lineColor [set every repeat] = $probe_color1
      pos [set every repeat] = [x1,y1]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 4
      stopVal [duration (s)] = 4
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    PolygonComponent probe2
      durationEstim = 1
      fillColor [set every repeat] = $probe_color2
      lineColor [set every repeat] = $probe_color2
      pos [set every repeat] = [x2,y2]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 4
      stopVal [duration (s)] = 4
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    PolygonComponent probe3
      durationEstim = 1
      fillColor [set every repeat] = $probe_color3
      lineColor [set every repeat] = $probe_color3
      pos [set every repeat] = [x3,y3]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 4
      stopVal [duration (s)] = 4
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    PolygonComponent probe4
      durationEstim = 1
      fillColor [set every repeat] = $probe_color4
      lineColor [set every repeat] = $probe_color4
      pos [set every repeat] = [x4,y4]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 4
      stopVal [duration (s)] = 4
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    PolygonComponent probe5
      durationEstim = 1
      fillColor [set every repeat] = $probe_color5
      lineColor [set every repeat] = $probe_color5
      pos [set every repeat] = [x5,y5]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 4
      stopVal [duration (s)] = 4
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trial', 1), ('answer', 4), ('x1', -0.2), ('y1', 0.4), ('stim_color1', '#cc79a7'), ('probe_color1', '#cc79a7'), ('x2', -0.4), ('y2', 0.0), ('stim_color2', '#0072b2'), ('probe_color2', '#0072b2'), ('x3', 0.0), ('y3', 0.4), ('stim_color3', '#d55e00'), ('probe_color3', '#d55e00'), ('x4', -0.4), ('y4', 0.2), ('stim_color4', '#e69f00'), ('probe_color4', '#56b4e9'), ('x5', -0.4), ('y5', -0.2), ('stim_color5', '#f0e442'), ('probe_color5', '#f0e442')]),
      OrderedDict([('trial', 2), ('answer', 5), ('x1', -0.2), ('y1', 0.4), ('stim_color1', '#d55e00'), ('probe_color1', '#d55e00'), ('x2', -0.2), ('y2', -0.4), ('stim_color2', '#009e73'), ('probe_color2', '#009e73'), ('x3', 0.4), ('y3', 0.0), ('stim_color3', '#f0e442'), ('probe_color3', '#f0e442'), ('x4', 0.0), ('y4', -0.4), ('stim_color4', '#e69f00'), ('probe_color4', '#e69f00'), ('x5', 0.2), ('y5', -0.4), ('stim_color5', '#0072b2'), ('probe_color5', '#000000')]),
      OrderedDict([('trial', 3), ('answer', 2), ('x1', -0.4), ('y1', 0.2), ('stim_color1', '#d55e00'), ('probe_color1', '#d55e00'), ('x2', 0.2), ('y2', 0.4), ('stim_color2', '#000000'), ('probe_color2', '#e69f00'), ('x3', 0.0), ('y3', 0.0), ('stim_color3', '#56b4e9'), ('probe_color3', '#56b4e9'), ('x4', 0.0), ('y4', 0.4), ('stim_color4', '#cc79a7'), ('probe_color4', '#cc79a7'), ('x5', 0.0), ('y5', -0.2), ('stim_color5', '#0072b2'), ('probe_color5', '#0072b2')]),
      OrderedDict([('trial', 4), ('answer', 5), ('x1', 0.4), ('y1', -0.2), ('stim_color1', '#f0e442'), ('probe_color1', '#f0e442'), ('x2', -0.4), ('y2', 0.0), ('stim_color2', '#cc79a7'), ('probe_color2', '#cc79a7'), ('x3', 0.4), ('y3', -0.4), ('stim_color3', '#d55e00'), ('probe_color3', '#d55e00'), ('x4', 0.2), ('y4', 0.2), ('stim_color4', '#e69f00'), ('probe_color4', '#e69f00'), ('x5', -0.4), ('y5', -0.4), ('stim_color5', '#000000'), ('probe_color5', '#0072b2')])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
    Routine array
    Routine probe
  LoopTerminator trials
